OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Anthony Lin
0x9f5c4075 = WAP Training -- Acquisition
Comment
  Step 1: Ensure that OpenViBE Acquisition Server
   is running and broadcasting data
Comment
  WAP Team -- Jan 19 2013
  WAP Training -- Acquisition

  Used to collect initial data with which to train the classifier
Comment
  Step 2: Change "Filename" to where
  you want to save the data
  (i.e. Kyl014_Trn1.ov)
Comment
  Step 3: Run scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 4
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
Data=#3 -> Signal display "EEG Signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Graz Motor Imagery BCI Stimulator => #5
  Lua Script = C:/Users/seidi/Documents/GitHub/real-time-bmi/mi processing v1/scripts/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 2.500
  End of Trial Maximum Duration (in sec) = 4.500
-> Player Controller
  Stimulation name = OVTK_StimulationId_Train
  Action to perform = Stop
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#5 -> Generic stream writer
  Filename = C:/Users/seidi/Desktop/103CO_LSL_1458_Trn1_$core{date}_$core{time}.ov
  Use compression = true
Stimulations=#5 -> Graz visualization
  Show instruction = true
  Show feedback = false
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
