OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Step 1: Change "Filename" to the
  data just recorded from Acquisition
  (i.e. Kyl014_Trn1.ov)
Comment
  WAP Team-- Oct 16 2013
  WAP Training -- Train Classifier

  Used to train the LDA classifier based on the data and CSP
  taken from Acquisition and Train CSP
Comment
  Step 2: Change "Spatial filter configuration" to
  the CSP just saved from Train CSP
  (i.e. Kyl014_Trn1_6D_CSP.cfg)
Comment
  Step 3: Change "Filename to save the configuration to"
  to where you want to save your LDA classifier
  (i.e. Kyl014_Trn1_LDA.cfg)
Comment
  Step 4: Run scenario and fast-forward

Generic stream reader => #0
  Filename = C:/Users/seidi/Documents/GitHub/real-time-bmi/test_data/16ch_mi_hands.ov
#0.Output stream 2 -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 4
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
Input stream 1=#3, Input stream 2=#0.Output stream 3 -> Identity => #4
#4.Output stream 1 -> CSP Spatial Filter => #5
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/seidi/Documents/GitHub/real-time-bmi/mi processing v1/csp.cfg
Input signal=#5, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Left Trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation 1 = OVTK_GDF_Left
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Signal Power Log
-> Feature aggregator => #9
Input signal=#4.Output stream 1, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Left Trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation 1 = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Signal Power Log
-> Feature aggregator => #13
Stimulations=#4.Output stream 2, Features for class 1=#9, Features for class 2=#13 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/seidi/Documents/GitHub/real-time-bmi/mi processing v1/classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
