OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Step 1: Ensure that OpenViBE Acquisition Server
   is running and broadcasting data
Comment
  Step 2: Change "Filename" to where
  you want to save the experiment data
  (i.e. Kyl014_Exp1.ov)
Comment
  Step 3: Change "Spatial filter configuration" to a
  CSP saved from Train CSP
  (i.e. Kyl014_Trn1_6D_CSP.cfg)
Comment
  WAP Team -- Oct 16 2013
  WAP Online -- OpenViBE Client

  Records and sends instantaneous EEG classifier data to the OVCC in realtime
  to allow for control of the statemachine
Comment
  Step 5: Change "Filename" to where you
  want save your classifier data
  (i.e. Kyl014_Clas1.csv)
Comment
  Step 6: Change "Filename"
  to where you want save your classifier data
  (i.e. Kyl014_Clas1.csv)
Comment
  Step 7: Change "Filename to load configuration from"
  to a LDA classifier saved from Train Classifier
  (i.e. Kyl014_Trn1_LDA.cfg)
Comment
  Step 8: Run scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector
  Channel List = 17
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 4
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 2
  Low Cut-off Frequency (Hz) = 5
  High Cut-off Frequency (Hz) = 150
-> Simple DSP => #4
  Equation = abs(x)
Data=#4 -> Signal display "EMG1"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Channel Selector
  Channel List = 18
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 4
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 2
  Low Cut-off Frequency (Hz) = 5
  High Cut-off Frequency (Hz) = 150
-> Simple DSP => #9
  Equation = abs(x)
Data=#9 -> Signal display "EMG2"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 4
-> Temporal Filter => #13
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
Data=#13 -> Signal display "EEG Signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream -> Generic stream writer
  Filename = C:/WAP_DATA/103CO/103CO_LSL_1458_eeg_$core{date}_$core{time}.ov
  Use compression = true
#0.Signal stream -> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 1.442817e-001 3.411863e-003 -1.213417e-001 -3.119889e-001 1.115873e-001 1.359580e-001 -1.116613e-001 -3.135968e-001 -1.250939e-001 -1.378700e-002 -2.625042e-001 -1.009421e-001 -2.279613e-001 6.689580e-001 -3.348420e-002 9.899176e-002 -4.863345e-002 4.481541e-001 -2.025669e-001 -9.318723e-002 5.258966e-002 2.090623e-004 -1.451749e-001 -3.856019e-001 -4.710458e-002 9.675494e-002 1.549741e-001 -7.944412e-002 -7.903602e-002 7.455923e-001 -3.815222e-001 2.166322e-001 7.102007e-002 -1.493399e-001 -5.719637e-002 -1.732339e-002 4.253947e-002 -1.286825e-001 -1.415511e-001 1.086118e-001 3.485295e-002 -2.764141e-001 8.364691e-001 -3.726375e-001 4.963272e-002 9.167431e-003 -1.381837e-002 -1.012741e-002 -1.700471e-002 -1.616294e-001 6.193112e-002 -2.344197e-002 -3.390554e-001 2.998192e-001 1.635785e-002 3.717487e-001 -8.495080e-002 8.709944e-002 -4.562827e-001 4.325673e-001 -3.228420e-001 7.993942e-003 -1.115950e-001 -1.922763e-001 2.762776e-001 2.720282e-002 1.158864e-001 -4.858494e-002 -3.275103e-001 2.691000e-001 8.273217e-002 1.568368e-001 6.632540e-002 -6.147631e-002 -4.658877e-001 5.034320e-001 -1.359116e-001 5.664146e-002 -2.065083e-001 3.221159e-001 -2.724882e-001 7.822386e-002 -2.063637e-001 1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Signal Power Log
-> Feature aggregator => #19
Features=#19 -> Classifier processor => #20
  Filename to load configuration from =
Input stream=#20.Hyperplane distance -> CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false

Matrix 2D to Vector
  Selection mode = Select
  Dimension to work on = 0
  Index in dimension = 0

Time signal
  Sampling frequency = 100
  Generated epoch sample count = 1
