OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Step 1: Change "Filename" to the
  EEG data recorded from Acquisition
  (i.e. Kyl014_Trn1.ov)
Comment
  Step 2: Change "Spatial filter configuration" to a
  CSP saved from Train CSP
  (i.e. Kyl014_Trn1_6D_CSP.cfg)
Comment
  WAP Team -- Oct 16 2013
  WAP Training -- Replay

  Optional: Used to view the LDA classifier and confusion matrix of
  recorded Acquisition or Acquisition with Feeback sessions
Comment
  Step 3: Change "Filename to load configuration from"
  to a LDA classifier saved from Train Classifier
  (i.e. Kyl014_Trn1_LDA.cfg)
Comment
  Step 4: Run scenario

CSV File Reader => #0
  Filename = C:/Users/Laboratorio/Desktop/record-[2023.05.12-14.19.06].csv
#0.Output stream -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 4
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
Input stream 1=#3, Input stream 2=#0.Output stimulation -> Identity => #4
#4.Output stream 1 -> CSP Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/Laboratorio/Desktop/csp.cfg
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Signal Power Log
-> Feature aggregator => #8
#4.Output stream 2 -> Switch director => #9
  Lua Script = C:/WAP_SOFTWARE/OpenVibe_032018/supplemental/motor-imagery-bci-epoch-selector.lua
  offset = 0.5
  duration = 4.0
Triggers=#9, Matrix=#8 -> Stream Switch => #10
  Default to output 1 = false
  Switch stim for output 1 = OVTK_StimulationId_Label_00
  Switch stim for output 2 = OVTK_StimulationId_Label_01
Features=#10.Output -> Classifier processor => #11
  Filename to load configuration from =
Amplitude=#11.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#9 -> Stimulation Filter => #13
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_GDF_Right
  Stimulation range end(1) = OVTK_GDF_Right
Targets=#13, Classification results=#11.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#13, Classifier 1=#11.Labels -> Classifier Accuracy Measure
