OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Step 1: Ensure that OpenViBE Acquisition Server
   is running and broadcasting data
Comment
  Step 2: Change "Filename" to where
  you want to save the EEG data
  (i.e. Kyl014_Trn1.ov)
Comment
  Step 3: Change "Spatial filter configuration" to a
  CSP saved from Train CSP
  (i.e. Kyl014_Trn1_6D_CSP.cfg)
Comment
  WAP Team -- May 2023
  WAP Training -- Acquisition with Feedback

  Optional: Record EEG data while simultaneously displaying visual
  feedback to the patient based on a previously trained CSP and LDA classifier
Comment
  Step 4: Change "Filename to load configuration from"
  to a LDA classifier saved from Train Classifier
  (i.e. Kyl014_Trn1_LDA.cfg)
Comment
  Step 5: Run scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector
  Channel List = 1;2;3;4;5;6;7;8;9;10;11;12;13;14;15;16
  Action = Select
  Channel Matching Method = Index
-> Signal Decimation
  Decimation factor = 4
-> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
Graz Motor Imagery BCI Stimulator => #4
  Lua Script = C:/WAP_SOFTWARE/OpenVibe_032018/supplemental/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Input stream 2=#0.Signal stream, Input stream 3=#4 -> Generic stream writer
  Filename = ${Path_Save}/${Experiment}_${Participant}_Sess${Session_nb}_raw_online_feedback.ov
  Use compression = true
#4 -> Delay Stimulation
  Lua Script = C:/WAP_SOFTWARE/OpenVibe_032018/supplemental/delay-stimulation.lua
  Delay = 10
-> Player Controller
  Stimulation name = OVTK_StimulationId_Train
  Action to perform = Stop
Input stream 1=#3, Input stream 2=#4 -> Identity => #8
#8.Output stream 1 -> CSP Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Path_Save}/${Experiment}_${Participant}_Sess${Session_nb}_csp.cfg
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Signal Power Log
-> Feature aggregator => #12
Features=#12 -> Classifier processor => #13
  Filename to load configuration from = ${Path_Save}/${Experiment}_${Participant}_Sess${Session_nb}_lda.cfg
Stimulations=#4, Amplitude=#13.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
